PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['A3Tone.wav', 'A5Tone.wav', 'Silence.wav', 'WhiteNoise.wav']
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = sound_experimentfinal
  keyboardBackend = Pyglet
  logging level = warning
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Routines
  Routine Instructions
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    TextComponent Welcome
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Welcome!


        In this experiment, you will see balls moving horizontally as shown next
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent PressKey
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue
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  Routine BallMovingExplanation
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    PolygonComponent Wall
      anchor = center-left
      fillColor = black
      lineColor = black
      opacity = 0.85
      pos = (-0.1, 0)
      shape = rectangle
      size = (1.5, 1)
      startVal [time (s)] = 1
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    PolygonComponent Circle
      fillColor = red
      lineColor = red
      pos [set every frame] = (extremeLeft-0.1 + t/2, 0)
      shape = circle
      size [set every repeat] = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent wall_front_2
      anchor = center-left
      fillColor = black
      lineColor = black
      opacity = 0.5
      pos = (-0.1, 0)
      shape = rectangle
      size = (1.5, 1)
      startVal [time (s)] = 1
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    KeyboardComponent Presstoendroutine
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
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    TextComponent BallHidden
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0
      text = The ball will move at a constant speed, but  a black screen will hide part of the movement.
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    TextComponent BallHidden_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 3
      text = In the actual experiment, the screen will completely hide the ball.
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    TextComponent Presskey
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0
      text = Press the space bar to continue
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        win_size = win.size
        extremeLeft = -(win.size[0]/win.size[1])/2
  Routine presstoBegin
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the space bar to begin the experiment:
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  Routine Finalballposition
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4.5
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    PolygonComponent wall_back
      anchor = center-left
      fillColor = black
      lineColor = black
      pos = (-0.1, 0)
      shape = rectangle
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent ball
      fillColor = red
      lineColor = red
      pos [set every frame] = ((extremeLeft-0.1) + current_time, 0)
      shape = circle
      size [set every repeat] = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent wall_front
      anchor = center-left
      fillColor = black
      lineColor = black
      opacity = 0.5
      pos = (-0.1, 0)
      shape = rectangle
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent StopTarget
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Press SPACE when the ball is EXACTLY ON THE TARGET
    TextComponent Rewards
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 3.5
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      text:
        Focus on the ACCURACY of your responses.
        Please take breaks only when indicated in the experiment prompts.
    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0
      text = Press the space bar to continue
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    PolygonComponent aim
      fillColor = red
      lineColor = red
      pos = (0.5, 0)
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    SoundComponent sound_3
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        win_size = win.size
        extremeLeft = -(win.size[0]/win.size[1])/2
    CodeComponent code_moving
      Code Type = Auto->JS
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      Begin Experiment:
        current_time = 0
        ball_stopped = False
      Begin Routine:
        sound_3.setVolume(0)
      Each Frame:
        if (not ball_stopped) and ball.pos[0] < 0.5:
            current_time = t
            sound_3.setVolume(1)
        else:
            current_time = -(extremeLeft-0.1)+0.5
            wall_front.opacity = 0
            ball_stopped = True
            sound_3.setVolume(0)
  Routine Target
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    PolygonComponent polygon_5
      anchor = center-left
      fillColor = black
      lineColor = black
      pos = (-0.1, 0)
      shape = rectangle
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent Target_1
      fillColor = red
      lineColor = red
      pos = (0.5, 0)
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_11
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = You will see a target on the right hand of the screen.
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue
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  Routine Practice
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent PacticePrompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will start a practice trial
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue
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  Routine Thank_you
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    TextComponent Thankyou
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation



        Please press Esc to end the experiment.
  Routine BallMoving
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    PolygonComponent Circle_2
      fillColor = red
      lineColor = red
      pos [set every frame] = ((extremeLeft-0.1)+t*Speed, 0)
      shape = circle
      size [set every repeat] = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent Wall_2
      anchor = center-left
      fillColor = black
      lineColor = black
      pos = (-0.1, 0)
      shape = rectangle
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent Target_2
      fillColor = red
      lineColor = red
      pos = (0.5, 0)
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    KeyboardComponent Presstoendroutine_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1/Speed
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    SoundComponent sound_2
      sound [set every repeat] = $frequencyvalue
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        final_position = None
      End Routine:
        # Calculate the final position adjusted for the radius
        final_position = (Circle_2.pos[0] - 0.1, Circle_2.pos[1])

        # Output the adjusted final position to the data file
        thisExp.addData('final_position_x', final_position[0])
        thisExp.addData('final_position_y', final_position[1])
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        sound_2.setVolume(0)
      Each Frame:
        if ball.pos[0] > -1.1:
            sound_2.setVolume(1)
        else:
            sound_2.setVolume(0)
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        win_size = win.size
        extremeLeft = -(win.size[0]/win.size[1])/2
  Routine Rest
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    PolygonComponent Wall_3
      anchor = center-left
      fillColor = black
      lineColor = black
      pos = (-0.1, 0)
      shape = rectangle
      size = (1.5, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent Target_3
      fillColor = red
      lineColor = red
      pos = (0.5, 0)
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Continue
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        # Each Frame
        keys = key_resp.getKeys()

        if keys:
            if keys[0].name == 'n':
                continueRoutine = False  # Set continueRoutine to False to end the routine
            elif keys[0].name == 'y':
                trials_2.finished = True  # End the entire loop
                continueRoutine = False
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Are you ready to begin?

        Press Y or N
    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PositionCriteriaReminder
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    PolygonComponent wall_back_2
      anchor = center-left
      fillColor = black
      lineColor = black
      pos = (-0.1, 0)
      shape = rectangle
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent ball_2
      fillColor = red
      lineColor = red
      pos [set every frame] = (0.5, 0)
      shape = circle
      size [set every repeat] = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent wall_front_3
      anchor = center-left
      fillColor = black
      lineColor = black
      opacity = 0.5
      pos = (-0.1, 0)
      shape = rectangle
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent StopTarget_2
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Remember stop the ball EXACTLY ON THE TARGET
    TextComponent Rewards_2
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 2
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      text:
        Focus on ACCURACY, so do not rush and be precise.
    TextComponent text_6
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0
      text = Press the space key to continue
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    PolygonComponent aim_2
      fillColor = red
      lineColor = red
      pos = (0.5, 0)
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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  Routine ShortRestwithTarget
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 120
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    PolygonComponent wall_back_3
      anchor = center-left
      fillColor = black
      lineColor = black
      pos = (-0.1, 0)
      shape = rectangle
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent StopTarget_3
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Take a short break
    TextComponent text_7
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0
      text = Press the space bar to continue
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    PolygonComponent aim_3
      fillColor = red
      lineColor = red
      pos = (0.5, 0)
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        current_loop = trials_6times

        if trials_6times.thisN == trials_6times.nReps - 1:
            continueRoutine = False
        else:
            continueRoutine = True
      Each Frame:
        keys = key_resp_9.getKeys()

        if keys:
            if keys[0].name == 'space':
               continueRoutine = False
  Routine SessionBreak
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    TextComponent SessionBreak_2
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0
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      text:
        Way to go!

        Take a longer break until you are ready to continue.
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        current_loop = trials_4sessions

        if trials_4sessions.thisN == trials_4sessions.nReps - 1:
            continueRoutine = False
        else:
            continueRoutine = True
      Each Frame:
        keys = key_resp_4.getKeys()

        if keys:
            if keys[0].name == 'space':
               continueRoutine = False
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Presskey_2
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0
      text = Press the space key to continue
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  Routine SurveyEnd
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    TextComponent Survey
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Congratulations!
        You completed the experiment.
        We just have a few more questions:
    TextboxComponent Speeds
      alignment = center-left
      anchor = center-left
      bold = False
      editable = True
      letterHeight = 0.04
      pos = (-0.7, 0.15)
      size = (1.4, 0.2)
      startVal [time (s)] = 0.0
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      text:
        1) How many different speeds did you identify?
    TextboxComponent Strategy
      alignment = center-left
      anchor = center-left
      bold = False
      editable = True
      letterHeight = 0.04
      pos = (-0.7, 0.05)
      size = (1.4, 0.2)
      startVal [time (s)] = 0.0
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      text:
        2) Did you use any particular strategy to estimate the ball movement?
    TextboxComponent Purpose
      alignment = center-left
      anchor = center-left
      bold = False
      editable = True
      letterHeight = 0.04
      pos = (-0.7, -0.05)
      size = (1.4, 0.2)
      startVal [time (s)] = 0.0
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      text:
        3) What do you think is the purpose of the experiment?
    TextboxComponent Age
      alignment = center-left
      anchor = center-left
      bold = False
      editable = True
      letterHeight = 0.04
      pos = (-0.7, -0.15)
      size = (1.4, 0.2)
      startVal [time (s)] = 0.0
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      text:
        4) Please write down your age
    TextboxComponent Gender
      alignment = center-left
      anchor = center-left
      bold = False
      editable = True
      letterHeight = 0.04
      pos = (-0.7, -0.25)
      size = (1.4, 0.2)
      startVal [time (s)] = 0.0
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      text:
        5) Please state your gender (M) or (F)
    TextComponent PressCTRL
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the CTRL key to continue
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    CodeComponent code_6
      Code Type = Auto->JS
      Before Experiment:
        continueRoutine = True
      Each Frame:
        # In the Each Frame tab of a code component

        # Check for keypress events
        keys = event.getKeys()

        # Check if 'ctrl' key is pressed
        if 'lctrl' in keys or 'rctrl' in keys:
            # End the routine
            continueRoutine = False
Flow
  Routine Instructions
  Routine BallMovingExplanation
  Routine Target
  Routine Finalballposition
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine Practice
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = 0:3
      conditionsFile = MovementParameters.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'Speed': 0.5, 'sound_frequency': 'high', 'frequencyvalue': 'A5Tone.wav', 'frequency': 880},
        {'Speed': 1, 'sound_frequency': 'high', 'frequencyvalue': 'A5Tone.wav', 'frequency': 880},
        {'Speed': 0.5, 'sound_frequency': 'low', 'frequencyvalue': 'A3Tone.wav', 'frequency': 220},
        {'Speed': 1, 'sound_frequency': 'low', 'frequencyvalue': 'A3Tone.wav', 'frequency': 220},
        {'Speed': 0.5, 'sound_frequency': 'wave', 'frequencyvalue': 'WhiteNoise.wav', 'frequency': 1},
        {'Speed': 1, 'sound_frequency': 'wave', 'frequencyvalue': 'WhiteNoise.wav', 'frequency': 1},
        {'Speed': 0.5, 'sound_frequency': 'Silence', 'frequencyvalue': 'Silence.wav', 'frequency': 0},
        {'Speed': 1, 'sound_frequency': 'Silence', 'frequencyvalue': 'Silence.wav', 'frequency': 0}]
      Routine BallMoving
      Routine Rest
    LoopTerminator trials
    Routine Continue
  LoopTerminator trials_2
  Routine presstoBegin
  LoopInitiator trials_4sessions loopType="TrialHandler"
    loopType = random
    nReps = 4
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    LoopInitiator trials_6times loopType="TrialHandler"
      loopType = random
      nReps = 6
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      LoopInitiator trials_2_16times loopType="TrialHandler"
        conditionsFile = MovementParameters.xlsx
        loopType = random
        nReps = 2
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        conditions:
          [{'Speed': 0.5, 'sound_frequency': 'high', 'frequencyvalue': 'A5Tone.wav', 'frequency': 880},
          {'Speed': 1, 'sound_frequency': 'high', 'frequencyvalue': 'A5Tone.wav', 'frequency': 880},
          {'Speed': 0.5, 'sound_frequency': 'low', 'frequencyvalue': 'A3Tone.wav', 'frequency': 220},
          {'Speed': 1, 'sound_frequency': 'low', 'frequencyvalue': 'A3Tone.wav', 'frequency': 220},
          {'Speed': 0.5, 'sound_frequency': 'wave', 'frequencyvalue': 'WhiteNoise.wav', 'frequency': 1},
          {'Speed': 1, 'sound_frequency': 'wave', 'frequencyvalue': 'WhiteNoise.wav', 'frequency': 1},
          {'Speed': 0.5, 'sound_frequency': 'Silence', 'frequencyvalue': 'Silence.wav', 'frequency': 0},
          {'Speed': 1, 'sound_frequency': 'Silence', 'frequencyvalue': 'Silence.wav', 'frequency': 0}]
        Routine BallMoving
        Routine Rest
      LoopTerminator trials_2_16times
      Routine ShortRestwithTarget
    LoopTerminator trials_6times
    Routine SessionBreak
  LoopTerminator trials_4sessions
  Routine SurveyEnd
  Routine Thank_you
